PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {u'gender': u'', u'age': u'', u'handedness': u'', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1707, 1067]
  color = $[-1,-1,-1]
  expName = ColourTesting
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Instructions2
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    TextComponent text_5
      font = SimHei
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        这是 2-back 测试。
        如果你认为当前出现的彩色方块
        与两个试次前的方块颜色相同，
        请按空格键。
        仅在颜色重复时按空格键
        （例如当前方块与两次前的颜色一致）。
        按空格键开始任务。
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions3
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    TextComponent text_6
      font = SimHei
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        这是 3-back 测试。
        如果你认为当前出现的彩色方块
        与三个试次前的方块颜色相同，
        请按空格。
        仅在颜色重复时按空格键
        （例如当前方块与三次前的颜色一致）。
        按空格键开始任务。
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fixation
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    TextComponent Fix
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.1
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = +
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  Routine Welcome
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    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        你好，欢迎参加本次认知任务。
        这是一个 n-back 记忆任务。
        你需要关注一系列彩色方块的序列，
        并判断当前出现的方块是否与你 n 次之前看到的相同。
        任务共分为 3 个阶段，每个阶段有 不同的规则。
        我们会在新阶段开始时告知你对应的规则。
        按空格键继续。
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Break
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    TextComponent text_2
      font = SimHei
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        现在进入短暂休息时间。
        准备好后，请按空格键继续。
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    PolygonComponent polygon
      fillColor [set every repeat] = $colourtest
      lineColor [set every repeat] = $colourtest
      lineWidth [set every repeat] = 1
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      shape = rectangle
      size [set every repeat] = (0.20,0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      correctAns = $corresp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      store = all keys
      storeCorrect = True
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  Routine Thanks
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    TextComponent text_3
      font = SimHei
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        感谢您参与本次实验。
        实验人员稍后会与您对接。
  Routine Instructions
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    TextComponent text
      font = SimHei
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        这是 1-back 测试。
        如果你认为当前出现的彩色方块
        与前一个相同，
        请按空格键。
        仅在方块颜色重复时按空格键
        （例如当前方块与前一次颜色一致）。
        按空格键开始任务。
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine Instructions
  LoopInitiator Block1_1back loopType="TrialHandler"
    conditionsFile = ColourTest1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'corresp': None, 'colourtest': 'White'},
      {'corresp': None, 'colourtest': 'Blue'},
      {'corresp': ['space'], 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Red'},
      {'corresp': None, 'colourtest': 'Yellow'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': ['space'], 'colourtest': 'Green'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': None, 'colourtest': 'Red'},
      {'corresp': ['space'], 'colourtest': 'Red'},
      {'corresp': None, 'colourtest': 'Magenta'},
      {'corresp': ['space'], 'colourtest': 'Magenta'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': None, 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': ['space'], 'colourtest': 'Cyan'},
      {'corresp': None, 'colourtest': 'Yellow'},
      {'corresp': ['space'], 'colourtest': 'Yellow'},
      {'corresp': None, 'colourtest': 'Magenta'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': ['space'], 'colourtest': 'Green'},
      {'corresp': None, 'colourtest': 'White'},
      {'corresp': ['space'], 'colourtest': 'White'},
      {'corresp': None, 'colourtest': 'Magenta'},
      {'corresp': None, 'colourtest': 'Blue'},
      {'corresp': ['space'], 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': None, 'colourtest': 'White'},
      {'corresp': None, 'colourtest': 'Red'},
      {'corresp': ['space'], 'colourtest': 'Red'},
      {'corresp': None, 'colourtest': 'White'},
      {'corresp': None, 'colourtest': 'Red'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': ['space'], 'colourtest': 'Cyan'}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
    Routine Fixation
    Routine trial
  LoopTerminator Block1_1back
  Routine Break
  Routine Instructions2
  LoopInitiator Block2_2back loopType="TrialHandler"
    conditionsFile = ColourTest2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'corresp': None, 'colourtest': 'White'},
      {'corresp': None, 'colourtest': 'Red'},
      {'corresp': None, 'colourtest': 'Magenta'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': ['space'], 'colourtest': 'Magenta'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': None, 'colourtest': 'White'},
      {'corresp': ['space'], 'colourtest': 'Green'},
      {'corresp': None, 'colourtest': 'Blue'},
      {'corresp': ['space'], 'colourtest': 'Green'},
      {'corresp': None, 'colourtest': 'White'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': ['space'], 'colourtest': 'White'},
      {'corresp': None, 'colourtest': 'Red'},
      {'corresp': None, 'colourtest': 'White'},
      {'corresp': None, 'colourtest': 'Yellow'},
      {'corresp': ['space'], 'colourtest': 'White'},
      {'corresp': None, 'colourtest': 'Magenta'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': None, 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Magenta'},
      {'corresp': ['space'], 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': None, 'colourtest': 'Yellow'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': None, 'colourtest': 'Blue'},
      {'corresp': ['space'], 'colourtest': 'Cyan'},
      {'corresp': None, 'colourtest': 'Magenta'},
      {'corresp': None, 'colourtest': 'Red'},
      {'corresp': ['space'], 'colourtest': 'Magenta'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': ['space'], 'colourtest': 'Yellow'},
      {'corresp': None, 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': ['space'], 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Yellow'}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
    Routine Fixation
    Routine trial
  LoopTerminator Block2_2back
  Routine Break
  Routine Instructions3
  LoopInitiator Block3_3back loopType="TrialHandler"
    conditionsFile = ColourTest3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'corresp': None, 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Red'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': ['space'], 'colourtest': 'Blue'},
      {'corresp': ['space'], 'colourtest': 'Red'},
      {'corresp': ['space'], 'colourtest': 'Cyan'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': None, 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'White'},
      {'corresp': None, 'colourtest': 'Magenta'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': ['space'], 'colourtest': 'White'},
      {'corresp': ['space'], 'colourtest': 'Magenta'},
      {'corresp': None, 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': None, 'colourtest': 'Magenta'},
      {'corresp': ['space'], 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Red'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': ['space'], 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Yellow'},
      {'corresp': None, 'colourtest': 'White'},
      {'corresp': None, 'colourtest': 'Magenta'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': ['space'], 'colourtest': 'White'},
      {'corresp': None, 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': None, 'colourtest': 'Red'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': ['space'], 'colourtest': 'Green'},
      {'corresp': None, 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': None, 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': ['space'], 'colourtest': 'Cyan'}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
    Routine Fixation
    Routine trial
  LoopTerminator Block3_3back
  Routine Thanks
